PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'age': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = DelayDiscountingTitrated
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    KeyboardComponent key_resp
      allowedKeys = '1', '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy import core
      Begin Experiment:
        immediateValue1 = 300
        delay = "5 years"
        maxvalue = 1000
        minvalue = 0
        roundN = 1
        interval = 0


        from psychopy import visual

        immediateText = visual.TextStim(
            win,
            text="0 now\n(1)",
            pos=(-0.4, 0),
            color="black",
            font="Times New Roman"
        )

        delayText = visual.TextStim(
            win,
            text="1000 in\n(3)",
            pos=(0.4, 0),
            color="black",
            font="Times New Roman"
        )
      Each Frame:
        immediateText.draw()
        delayText.draw()
      End Routine:
        if roundN == 1:
            if key_resp.keys[0] == '1':
                interval = immediateValue1 - minvalue
            elif key_resp.keys[0] == '3':
                interval = maxvalue - immediateValue1
        interval = interval/2


        ## If they choose the immediate option, subtract the
        if key_resp.keys == '1':
            updateAmount = round(immediateValue1 - interval,0)

        elif key_resp.keys == '3':
            updateAmount = round(immediateValue1 + interval,0)

        ## Wait one second now that the selected text is green
        core.wait(1)

        immediateValue1 = updateAmount


        roundN += 1
    TextComponent immediate_text
      font = Times New Roman
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = $f"${immediateValue1} now\n(1)"
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    TextComponent delay_text
      font = Times New Roman
      letterHeight = 0.05
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = $f"${maxvalue} in\n{delay}\n(3)"
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    TextComponent debug
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $f"interval:{interval} val:{immediateValue1} round:{roundN}"
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    TextComponent which_text
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = Which would you prefer?
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    TextComponent or_text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = OR
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  Routine Instructions
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  Routine displaySetup
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Drag this window to the participant display.

        Press:
        F = fullscreen
        SPACE = continue
        ESC = quit
    KeyboardComponent key_resp_2
      allowedKeys = 'f', 'space', 'escape'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent fullscreen_code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import gui, core

        dlg = gui.Dlg(title="Select Monitor")
        dlg.addField("Which monitor index? (0, 1, 2...)")

        ok = dlg.show()

        if not dlg.OK:
            core.quit()

        which_monitor = int(ok[0])
        expInfo["screen"] = which_monitor
Flow
  LoopInitiator trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 10
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    Routine trial
  LoopTerminator trials
