PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = PAT_PRACTICE_icons
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    TextComponent wel
      color = -1.0000, -1.0000, -1.0000
      font = Consolas
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Welcome to the Friends Game!

        We will now show you how to play this game.

        Press spacebar for a demo.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ChoiceRoutine_1
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    TextComponent Who
      color = -1.0000, -1.0000, -1.0000
      contrast = 10
      font = Arial Bold
      letterHeight = 0.04
      pos = (0 ,0.38)
      startVal [time (s)] = 0.0
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      text:
        Who do you want to be friends with?
    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent Player1demo
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Player2demo
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cooking
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      letterHeight = 0.0113
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movies
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      letterHeight = 0.0113
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dancing
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      letterHeight = 0.0113
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent fashion
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/fashion.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = fashion
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    ImageComponent movie
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent writing
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/writing.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = writing
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Player1_1
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    PolygonComponent polygon_6
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (-0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent Player1
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cook
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movie_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dance
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent p1
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    ImageComponent yes1
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (-0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topyesp1
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    PolygonComponent polygon_5
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent Player1_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cook_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movie_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dance_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_13
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent p1_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent you
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent yess
      image = C:/Users/tuu20869/Desktop/stimuli/feedback/Thumbs_up.png
      pos = (0.0,-0.080)
      size = (0.2, 0.3)
      startVal [time (s)] = 2.5
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Player2_1
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    PolygonComponent polygon_7
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent player
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent fashion_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/fashion.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = fashion
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    ImageComponent movie_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent writing_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/writing.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_12
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = writing
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    ImageComponent yes1_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (0.4,0.13)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_14
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topyesp2
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    PolygonComponent polygon_4
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent Player2_4
      image = C:/Users/tuu20869/Desktop/stimuli/practice/player2.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent fashion_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/fashion.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.09)
      startVal [time (s)] = 0.0
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      text:
        fashion
    ImageComponent movie_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent writ
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_31
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = writing
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    TextComponent p1_4
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    TextComponent you_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    ImageComponent participantpic_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent yes
      image = C:/Users/tuu20869/Desktop/stimuli/feedback/Thumbs_up.png
      pos = (0.0,-0.080)
      size = (0.25, 0.25)
      startVal [time (s)] = 2.5
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait
    RoutineSettingsComponent wait
      stopVal [duration (s)] = 3
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    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent text_16
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = +
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  Routine ChoiceRoutine_2
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    TextComponent Who_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 4
      font = Courier New
      letterHeight = 0.04
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
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      text:
        Who do you want to be friends with?
    TextComponent text_15
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent text_17
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent Player1demo_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Player2demo_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_18
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent instruments
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_20
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knitting
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_19
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = knitting
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    ImageComponent beachpic
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_22
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycling
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_23
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = cycling
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    KeyboardComponent friendChoice
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_24
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = beach
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  Routine Play1_2
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    PolygonComponent polygon_8
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (-0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent p1_3
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    ImageComponent Player1_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_28
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent instruments_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_29
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knitting_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent yes1_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (-0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_38
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = knitting
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topnop1
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    PolygonComponent polygon_12
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent Player1_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writt
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.09)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent piano
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.095)
      startVal [time (s)] = 0.0
      text = knitting
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    ImageComponent knittingg
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_32
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.095)
      startVal [time (s)] = 0.0
      text = instruments
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    TextComponent p1_5
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent you_3
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic_6
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent no_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_down.png
      pos = (0.0,-0.080)
      size = (0.25, 0.25)
      startVal [time (s)] = 2.5
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_8
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine play2_2
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    PolygonComponent polygon_10
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_27
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent player_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent beachpic_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_25
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = beach
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    ImageComponent writingpic2_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_26
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycling_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_30
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = cycling
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    ImageComponent yes1_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_9
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topnop2
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    PolygonComponent polygon_14
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent Player1_6
      image = C:/Users/tuu20869/Desktop/stimuli/practice/player2.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent beach1
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        beach
    ImageComponent write
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycle
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_33
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.10)
      startVal [time (s)] = 0.0
      text = cycling
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    TextComponent p1_6
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    TextComponent you_4
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent no_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_down.png
      pos = (0.0,-0.080)
      size = (0.25, 0.25)
      startVal [time (s)] = 2.5
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_14
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait_2
    RoutineSettingsComponent wait_2
      stopVal [duration (s)] = 3
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    PolygonComponent polygon_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent text_36
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = +
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  Routine ChoiceRoutine_3
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    TextComponent Who_3
      color = -1.0000, -1.0000, -1.0000
      contrast = 4
      font = Courier New
      letterHeight = 0.04
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
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      text:
        Who do you want to be friends with?
    TextComponent text_21
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent text_39
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent Player1demo_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Player2demo_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_40
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent instruments_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_41
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.4, -0.07)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knitting_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_42
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.3, -0.07)
      startVal [time (s)] = 0.0
      text = knitting
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    ImageComponent beachpic_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic2_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_43
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycling_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_44
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = cycling
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    KeyboardComponent friendChoice_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_45
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.3, -0.07)
      startVal [time (s)] = 0.0
      text = beach
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  Routine player1_3
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    PolygonComponent polygon_9
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (-0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent p1_9
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    ImageComponent Player1_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic_4
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_46
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent instruments_4
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_47
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knitting_4
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent yes1_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (-0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_49
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = knitting
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice_2.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_11
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topnsp1
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    PolygonComponent polygon_35
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -0.4902, -0.5373, -0.5059
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    PolygonComponent polygon_33
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -0.4902, -0.5373, -0.5059
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent Player1_7
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent draw
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent wright
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent pianoo
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_12
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knit
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_34
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent p1_7
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent you_5
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent notseen
      image = C:/Users/tuu20869/Desktop/stimuli/feedback/grey_box.png
      pos = (0.0,-0.080)
      size = (0.1, 0.1)
      startVal [time (s)] = 2.5
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice_2.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_12
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine player2_3
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    PolygonComponent polygon_11
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_50
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent player_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent beachpic_4
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_51
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = beach
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    ImageComponent writingpic2_4
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_52
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycling_4
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_53
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = cycling
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    ImageComponent yes1_6
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice_2.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_10
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topnsp2
    PolygonComponent polygon_36
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -0.4039, -0.3725, -0.3569
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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
    PolygonComponent polygon_34
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -0.4902, -0.5373, -0.5059
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    PolygonComponent polygon_15
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -0.4039, -0.3725, -0.3569
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent Player1_8
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent beachh
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_13
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        beach
    ImageComponent wrightt
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_14
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = writing
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    ImageComponent cyc
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_35
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = cycling
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    TextComponent p1_8
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent you_6
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_6
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_6
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_6
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent notseen2
      image = C:/Users/tuu20869/Desktop/stimuli/feedback/grey_box.png
      pos = (0.0,-0.080)
      size = (0.1, 0.1)
      startVal [time (s)] = 2.5
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice_2.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_13
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ChoiceRoutine_4
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    TextComponent Who_4
      color = -1.0000, -1.0000, -1.0000
      contrast = 4
      font = Courier New
      letterHeight = 0.04
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
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      text:
        Who do you want to be friends with?
    TextComponent text_37
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent text_48
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent Player1demo_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Player2demo_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cooking_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_54
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movies_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_55
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dancing_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_56
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent fashion_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/fashion.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_57
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.3, -0.07)
      startVal [time (s)] = 0.0
      text = fashion
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    ImageComponent movie_6
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_58
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent writing_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/writing.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_59
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = writing
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    KeyboardComponent key_resp_15
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine player1_4
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    PolygonComponent polygon_16
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (-0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent Player1_9
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cook_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movie_7
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_15
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dance_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_60
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent p1_10
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    ImageComponent yes1_7
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (-0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_16
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topyesp1_2
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    PolygonComponent polygon_17
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent Player1_10
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cook_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_16
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movie_8
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_17
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dance_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_61
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent p1_11
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent you_7
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_7
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_7
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_7
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic_7
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent yess_2
      image = C:/Users/tuu20869/Desktop/stimuli/feedback/Thumbs_up.png
      pos = (0.0,-0.080)
      size = (0.2, 0.3)
      startVal [time (s)] = 2.5
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_17
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topyesp2_2
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    PolygonComponent polygon_19
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent Player2
      image = C:/Users/tuu20869/Desktop/stimuli/practice/player2.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent fashion_6
      image = C:/Users/tuu20869/Desktop/stimuli/icons/fashion.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_18
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        fashion
    ImageComponent movie_10
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_19
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent writ_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_66
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = writing
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    TextComponent p1_12
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    TextComponent you_8
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_8
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_8
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_8
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    ImageComponent participantpic_8
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent yes_2
      image = C:/Users/tuu20869/Desktop/stimuli/feedback/Thumbs_up.png
      pos = (0.0,-0.080)
      size = (0.25, 0.25)
      startVal [time (s)] = 2.5
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_19
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait_3
    RoutineSettingsComponent wait_3
      stopVal [duration (s)] = 3
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    PolygonComponent polygon_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent text_67
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = +
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  Routine ChoiceRoutine_5
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    TextComponent Who_5
      color = -1.0000, -1.0000, -1.0000
      contrast = 4
      font = Courier New
      letterHeight = 0.04
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
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      text:
        Who do you want to be friends with?
    TextComponent text_68
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent text_69
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent Player1demo_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Player2demo_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic_5
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_70
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.086)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent instruments_5
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_71
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knitting_5
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_72
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = knitting
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    ImageComponent beachpic_5
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic2_5
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_73
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycling_5
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_74
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = cycling
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    KeyboardComponent friendChoice_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_75
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = beach
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  Routine Player2_3
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    PolygonComponent polygon_18
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent player_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent fashion_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/fashion.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_62
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = fashion
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    ImageComponent movie_9
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_63
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent writing_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/writing.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_64
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = writing
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    ImageComponent yes1_8
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (0.4,0.13)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_65
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_18
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topnop1_2
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    PolygonComponent polygon_21
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent Player1_12
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writt_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_20
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.11)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent piano_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_21
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = knitting
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    ImageComponent knittingg_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_79
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = instruments
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    TextComponent p1_14
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent you_9
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_9
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_9
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_9
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic_9
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent no
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_down.png
      pos = (0.0,-0.080)
      size = (0.25, 0.25)
      startVal [time (s)] = 2.5
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_21
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Play1_4
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    PolygonComponent polygon_20
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (-0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent p1_13
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    ImageComponent Player1_11
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic_6
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_76
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent instruments_6
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_77
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knitting_6
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent yes1_9
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (-0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_78
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = knitting
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_20
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topnop2_2
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    PolygonComponent polygon_23
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent Player1_13
      image = C:/Users/tuu20869/Desktop/stimuli/practice/player2.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent beach1_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_22
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        beach
    ImageComponent write_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.0, 0.13)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_23
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycle_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_84
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
      text = cycling
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    TextComponent p1_15
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    TextComponent you_10
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_10
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_10
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_10
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic_10
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent no_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_down.png
      pos = (0.0,-0.080)
      size = (0.25, 0.25)
      startVal [time (s)] = 2.5
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_23
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine play2_4
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    PolygonComponent polygon_22
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_80
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent player_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent beachpic_6
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_81
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = beach
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    ImageComponent writingpic2_6
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_82
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycling_6
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_83
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = cycling
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    ImageComponent yes1_10
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_22
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait_4
    RoutineSettingsComponent wait_4
      stopVal [duration (s)] = 3
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    PolygonComponent polygon_24
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent text_85
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = +
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  Routine ChoiceRoutine_6
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    TextComponent Who_6
      color = -1.0000, -1.0000, -1.0000
      contrast = 4
      font = Courier New
      letterHeight = 0.04
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
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      text:
        Who do you want to be friends with?
    TextComponent text_86
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent text_87
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent Player1demo_6
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Player2demo_6
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic_7
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_88
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.07)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent instruments_7
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_89
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knitting_7
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_90
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.3, -0.07)
      startVal [time (s)] = 0.0
      text = knitting
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    ImageComponent beachpic_7
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic2_7
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_91
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycling_7
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_92
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = cycling
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    KeyboardComponent friendChoice_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_93
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.3, -0.07)
      startVal [time (s)] = 0.0
      text = beach
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  Routine player1_5
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    PolygonComponent polygon_27
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (-0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent p1_18
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    ImageComponent Player1_16
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic_8
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_96
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent instruments_8
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_97
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knitting_8
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent yes1_11
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (-0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_98
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = knitting
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    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice_2.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_26
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topnsp1_2
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    PolygonComponent polygon_37
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -0.4039, -0.3725, -0.3569
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent Player1_14
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent draw_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent wright_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent pianoo_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_24
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knit_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_94
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent p1_16
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent you_11
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_11
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_11
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_11
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic_11
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent notseen_2
      image = C:/Users/tuu20869/Desktop/stimuli/feedback/grey_box.png
      pos = (0.0,-0.080)
      size = (0.1, 0.1)
      startVal [time (s)] = 2.5
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice_2.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_24
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine player2_5
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    PolygonComponent polygon_28
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_99
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent player_6
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent beachpic_8
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_100
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = beach
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    ImageComponent writingpic2_8
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_101
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycling_8
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_102
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = cycling
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    ImageComponent yes1_12
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice_2.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_27
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topnsp2_2
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    PolygonComponent polygon_32
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -0.4039, -0.3725, -0.3569
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent Player1_15
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent beachh_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_25
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        beach
    ImageComponent wrightt_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_26
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = writing
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    ImageComponent cyc_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_95
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = cycling
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    TextComponent p1_17
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent you_12
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_12
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_12
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_12
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_12
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_12
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_12
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic_12
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent notseen2_2
      image = C:/Users/tuu20869/Desktop/stimuli/feedback/grey_box.png
      pos = (0.0,-0.080)
      size = (0.1, 0.1)
      startVal [time (s)] = 2.5
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    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice_2.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_25
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait_5
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Flow
  Routine welcome
  Routine ChoiceRoutine_1
  Routine Player1_1
  Routine topyesp1
  Routine Player2_1
  Routine topyesp2
  Routine wait
  Routine ChoiceRoutine_2
  Routine Play1_2
  Routine topnop1
  Routine play2_2
  Routine topnop2
  Routine wait_2
  Routine ChoiceRoutine_3
  Routine player1_3
  Routine topnsp1
  Routine player2_3
  Routine topnsp2
  Routine wait_3
  Routine ChoiceRoutine_4
  Routine player1_4
  Routine topyesp1_2
  Routine Player2_3
  Routine topyesp2_2
  Routine wait_3
  Routine ChoiceRoutine_5
  Routine Play1_4
  Routine topnop1_2
  Routine play2_4
  Routine topnop2_2
  Routine wait_4
  Routine ChoiceRoutine_6
  Routine player1_5
  Routine topnsp1_2
  Routine player2_5
  Routine topnsp2_2
  Routine wait_5
