PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'Age': '', 'Wave': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = PAT_PRACTICE_icons
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    TextComponent wel
      color = -1.0000, -1.0000, -1.0000
      font = Consolas
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Welcome to the Friends Game!

        We will now show you how to play this game.

        Press spacebar for a demo.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent initialize_variables
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        import random

        # Step 1: list to track which rows have already been used across the whole task,
        # so the same peer never gets shown twice
        usedRows = []

        # load the stimuli/conditions file once
        conditions_df = pd.read_excel('stimuli/conditions.xlsx')

        # Step 2: determine age category & the column to pull images from
        # NOTE: adjust 'Age' below to match whatever key your participant info dialog
        # actually stores it under (e.g. expInfo['Age'])
        Age = float(expInfo['Age'])

        if Age >= 18:
            ageCategory = 'young_adults'
        elif 13 <= Age <= 17:
            ageCategory = 'teens'
        elif Age <= 12:
            ageCategory = 'children'
        else:
            ageCategory = None  # shouldn't happen, but a safe fallback

        # this is the actual column name in conditions.xlsx to read images from
        # CHANGE these strings to match your real column headers if they differ
        ageColumn = ageCategory
  Routine ChoiceRoutine_1
    CodeComponent images_and_names
      Code Type = Auto->JS
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      Begin Routine:
        # Step 4: pick a gender pool for this pair (participant's gender doesn't matter,
        # only that the two peers match each other)
        genderPool = random.choice(['female', 'male'])

        # excel row 2-61 (female) and 62-122 (male) → pandas 0-indexed positions
        # (excel row 2 = pandas index 0, since row 1 is the header)
        if genderPool == 'female':
            rowRange = list(range(0, 60))     # excel rows 2-61
        else:
            rowRange = list(range(60, 121))   # excel rows 62-122

        # filter out rows already used in earlier trials
        availableRows = [r for r in rowRange if r not in usedRows]

        # safety check: if this pool runs out, fall back to the other gender pool
        if len(availableRows) < 2:
            genderPool = 'male' if genderPool == 'female' else 'female'
            rowRange = list(range(60, 121)) if genderPool == 'male' else list(range(0, 60))
            availableRows = [r for r in rowRange if r not in usedRows]

        # pick two different random rows and mark them as used
        peerRows = random.sample(availableRows, 2)
        usedRows.extend(peerRows)

        # Step 5 & 6: follow the file path and store as image1 / image2
        peer1_row = peerRows[0]
        peer2_row = peerRows[1]

        nameCol = 3  # column D (0-indexed position, since D is the 4th column)

        image1 = 'stimuli/' + str(conditions_df.loc[peer1_row, ageColumn])
        name1 = str(conditions_df.iloc[peer1_row, nameCol])

        image2 = 'stimuli/' + str(conditions_df.loc[peer2_row, ageColumn])
        name2 = str(conditions_df.iloc[peer2_row, nameCol])
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    TextComponent Who
      color = -1.0000, -1.0000, -1.0000
      contrast = 10
      font = Courier New
      letterHeight = 0.04
      pos = (0 ,0.38)
      startVal [time (s)] = 0.0
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      text:
        Who do you want to be friends with?
    TextComponent name_1
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $name1
    TextComponent name_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $name2
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    ImageComponent Player1demo
      image [set every repeat] = $image1
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Player2demo
      image [set every repeat] = $image2
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cooking
      image = stimuli/icons/animals.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      contrast = 8
      letterHeight = 0.015
      pos = (-0.5, -0.086)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movies
      image = stimuli/icons/animals.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      letterHeight = 0.015
      pos = (-0.3, -0.07)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dancing
      image = stimuli/icons/animals.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      letterHeight = 0.015
      pos = (-0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent fashion
      image = stimuli/icons/animals.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = fashion
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    ImageComponent movie
      image = stimuli/icons/animals.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent writing
      image = stimuli/icons/animals.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = writing
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    KeyboardComponent key_resp
      allowedKeys = '1','2','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_31
      Code Type = Auto->JS
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      End Routine:
        if key_resp.keys == '1':
            Player1_1 = 1
            Player2_1 = 0

        elif key_resp.keys == '2':
            Player1_1 = 1
            Player2_1 = 0
  Routine Player1_1
    RoutineSettingsComponent Player1_1
      desc = response_choice != 'n'
      stopVal [duration (s)] = 3.0
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    PolygonComponent polygon_6
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (-0.4,0.13)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent leftplayer
      image [set every repeat] = $image1
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent icon7
      image = stimuli/icons/animals.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent ison7t
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (-0.5, -0.086)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent icon8
      image = stimuli/icons/animals.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent icon8t
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (-0.3, -0.07)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent icon9
      image = stimuli/icons/animals.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent int9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent selection_name_1
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $name1
    ImageComponent yes1
      image = stimuli/feedback/Thumbs_up.png
      pos = (-0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine topyesp2
    RoutineSettingsComponent topyesp2
      desc = response_choice != 'y'
      stopVal [duration (s)] = 3.0
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    PolygonComponent polygon_4
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 2.5
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    ImageComponent toprightpeer
      image [set every repeat] = $image2
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent icon20
      image = stimuli/icons/animals.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (-0.13, 0.076)
      startVal [time (s)] = 0.0
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      text:
        fashion
    ImageComponent icon21
      image = stimuli/icons/animals.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.13, 0.1)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent icon22
      image = stimuli/icons/animals.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_31
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.0, 0.1)
      startVal [time (s)] = 0.0
      text = writing
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    TextComponent toppeer_name_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $name2
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    TextComponent you_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent icon23
      image = stimuli/icons/animals.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (-0.13, -0.24)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent icon24
      image = stimuli/icons/animals.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0, -0.24) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent icon25
      image = stimuli/icons/animals.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    ImageComponent participantpic_5
      image = stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.13, -0.24)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent yes
      image = stimuli/feedback/Thumbs_up.png
      pos = (0.0,-0.080)
      size = (0.25, 0.25)
      startVal [time (s)] = 2.5
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Player2_1
    RoutineSettingsComponent Player2_1
      desc = response_choice != 'y'
      stopVal [duration (s)] = 3.0
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    PolygonComponent polygon_7
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.4,0.13)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent rightpeerchoice
      image [set every repeat] = $image2
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent icon16
      image = stimuli/icons/animals.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent int16
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = fashion
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    ImageComponent icon17
      image = stimuli/icons/animals.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent icon19
      image = stimuli/icons/animals.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_12
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = writing
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    ImageComponent yes1_2
      image = stimuli/feedback/Thumbs_up.png
      pos = (0.4,0.13)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent selection_name_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $name2
  Routine wait
    RoutineSettingsComponent wait
      stopVal [duration (s)] = 3
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    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent text_16
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = +
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  Routine topyesp1
    RoutineSettingsComponent topyesp1
      stopVal [duration (s)] = 3.0
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      desc:
        response_choice != 'n'
        '
    PolygonComponent polygon_5
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 2.5
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    ImageComponent topleftpeerchoice
      image [set every repeat] = $image1
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent icon10
      image = stimuli/icons/animals.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent int10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (-0.13, 0.084)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent icon11
      image = stimuli/icons/animals.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent int111
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.13, 0.10)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent icon12
      image = stimuli/icons/animals.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent int12
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.0, 0.10)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent toppeer_name1
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $name1
    TextComponent you
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent icon13
      image = stimuli/icons/animals.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent int13
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (-0.13, -0.24)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent icon14
      image = stimuli/icons/animals.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent int14
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0, -0.24) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent icon15
      image = stimuli/icons/animals.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent int15
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.13, -0.24)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic
      image = stimuli/practice/participant.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent yess
      image = stimuli/feedback/Thumbs_up.png
      pos = (0.0,-0.080)
      size = (0.2, 0.3)
      startVal [time (s)] = 2.5
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
Flow
  Routine welcome
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = stimuli/conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'children': 'stimuli/children/F01.png', 'teens': 'stimuli/adolescents/F01.png', 'young_adults': 'stimuli/adult/F01.png'},
      {'children': 'stimuli/children/F02.png', 'teens': 'stimuli/adolescents/F02.png', 'young_adults': 'stimuli/adult/F02.png'},
      {'children': 'stimuli/children/F03.png', 'teens': 'stimuli/adolescents/F03.png', 'young_adults': 'stimuli/adult/F03.png'},
      {'children': 'stimuli/children/F04.png', 'teens': 'stimuli/adolescents/F04.png', 'young_adults': 'stimuli/adult/F04.png'},
      {'children': 'stimuli/children/F05.png', 'teens': 'stimuli/adolescents/F05.png', 'young_adults': 'stimuli/adult/F05.png'},
      {'children': 'stimuli/children/F06.png', 'teens': 'stimuli/adolescents/F06.png', 'young_adults': 'stimuli/adult/F06.png'},
      {'children': 'stimuli/children/F07.png', 'teens': 'stimuli/adolescents/F07.png', 'young_adults': 'stimuli/adult/F07.png'},
      {'children': 'stimuli/children/F08.png', 'teens': 'stimuli/adolescents/F08.png', 'young_adults': 'stimuli/adult/F08.png'},
      {'children': 'stimuli/children/F09.png', 'teens': 'stimuli/adolescents/F09.png', 'young_adults': 'stimuli/adult/F09.png'},
      {'children': 'stimuli/children/F10.png', 'teens': 'stimuli/adolescents/F10.png', 'young_adults': 'stimuli/adult/F10.png'},
      {'children': 'stimuli/children/F11.png', 'teens': 'stimuli/adolescents/F11.png', 'young_adults': 'stimuli/adult/F11.png'},
      {'children': 'stimuli/children/F12.png', 'teens': 'stimuli/adolescents/F12.png', 'young_adults': 'stimuli/adult/F12.png'}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
    Routine ChoiceRoutine_1
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = Player1_1
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      Routine Player1_1
      Routine topyesp1
    LoopTerminator trials
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = Player2_1
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      Routine Player2_1
      Routine topyesp2
    LoopTerminator trials_2
    Routine wait
  LoopTerminator trials_3
