PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = PAT_randomization
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent welcome
      color = -1.0000, -1.0000, -1.0000
      font = Consolas
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Welcome to the Friends Game!

        We will now show you how to play this game.

        Press spacebar for a demo.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
