PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = PAT_v2
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent welcome
      color = -1.0000, -1.0000, -1.0000
      font = Consolas
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Welcome to the Friends Game!

        We will now show you how to play this game.

        Press spacebar for a demo.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ChoiceRoutine_1
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    TextComponent Who
      color = -1.0000, -1.0000, -1.0000
      contrast = 10
      font = Courier New
      letterHeight = 0.04
      pos = (0 ,0.38)
      startVal [time (s)] = 0.0
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      text:
        Who do you want to be friends with?
    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent Player1demo
      image [set every repeat] = $face
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Player2demo
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cooking
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      contrast = 8
      letterHeight = 0.015
      pos = (-0.5, -0.086)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        cooking
    ImageComponent movies
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      letterHeight = 0.015
      pos = (-0.3, -0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = dancing
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    ImageComponent dancing
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      letterHeight = 0.015
      pos = (-0.4, -0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = movies
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    ImageComponent fashion
      image [set every repeat] = C:/Users/tur31606/Desktop/pat/stimuli/icons/fashion.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = fashion
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    ImageComponent movie
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent writing
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/writing.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = writing
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Player1_1
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    PolygonComponent polygon_6
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (-0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent Player1
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cook
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (-0.5, -0.086)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movie_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (-0.3, -0.07)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dance
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent p1
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    ImageComponent yes1
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (-0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topyesp1
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    PolygonComponent polygon_5
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent Player1_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cook_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (-0.13, 0.084)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movie_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.13, 0.10)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dance_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_13
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.0, 0.10)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent p1_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent you
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (-0.13, -0.24)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0, -0.24) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.13, -0.24)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent yess
      image = C:/Users/tuu20869/Desktop/stimuli/feedback/Thumbs_up.png
      pos = (0.0,-0.080)
      size = (0.2, 0.3)
      startVal [time (s)] = 2.5
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Player2_1
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    PolygonComponent polygon_7
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent player
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent fashion_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/fashion.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = fashion
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    ImageComponent movie_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent writing_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/writing.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_12
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = writing
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    ImageComponent yes1_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (0.4,0.13)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_14
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topyesp2
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    PolygonComponent polygon_4
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent Player2_4
      image = C:/Users/tuu20869/Desktop/stimuli/practice/player2.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent fashion_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/fashion.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (-0.13, 0.076)
      startVal [time (s)] = 0.0
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      text:
        fashion
    ImageComponent movie_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.13, 0.1)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent writ
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_31
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.0, 0.1)
      startVal [time (s)] = 0.0
      text = writing
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    TextComponent p1_4
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    TextComponent you_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (-0.13, -0.24)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0, -0.24) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    ImageComponent participantpic_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.13, -0.24)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent yes
      image = C:/Users/tuu20869/Desktop/stimuli/feedback/Thumbs_up.png
      pos = (0.0,-0.080)
      size = (0.25, 0.25)
      startVal [time (s)] = 2.5
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait
    RoutineSettingsComponent wait
      stopVal [duration (s)] = 3
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    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent text_16
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = +
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    conditions:
      [{'face': 'children/F01.png', 'name': 'Amanda', 'interest1': 'writing', 'interest1_img': 'icons/writing.png', 'interest2': 'music', 'interest2_img': 'icons/music.png', 'interest3': 'knitting', 'interest3_img': 'icons/knitting.png'},
      {'face': 'children/F02.png', 'name': 'Bailey', 'interest1': 'animals', 'interest1_img': 'icons/animals.png', 'interest2': 'yoga', 'interest2_img': 'icons/yoga.png', 'interest3': 'photography', 'interest3_img': 'icons/photograph.png'},
      {'face': 'children/F03.png', 'name': 'Natalie', 'interest1': 'art', 'interest1_img': 'icons/art.png', 'interest2': 'travel', 'interest2_img': 'icons/travel.png', 'interest3': 'movies', 'interest3_img': 'icons/movies.png'},
      {'face': 'children/F04.png', 'name': 'Haley', 'interest1': 'beach', 'interest1_img': 'icons/beach.png', 'interest2': 'theater', 'interest2_img': 'icons/theater.png', 'interest3': 'martialarts', 'interest3_img': 'icons/martialarts.png'},
      {'face': 'children/F05.png', 'name': 'Jessica', 'interest1': 'camping', 'interest1_img': 'icons/camping.png', 'interest2': 'sports', 'interest2_img': 'icons/sports.png', 'interest3': 'instruments', 'interest3_img': 'icons/insturments.png'},
      {'face': 'children/F06.png', 'name': 'Emma', 'interest1': 'chatting', 'interest1_img': 'icons/chatting.png', 'interest2': 'singing', 'interest2_img': 'icons/singing.png', 'interest3': 'hiking', 'interest3_img': 'icons/hiking.png'}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
    Routine ChoiceRoutine_1
    Routine Player1_1
    Routine topyesp1
    Routine Player2_1
    Routine topyesp2
  LoopTerminator trials
  Routine wait
