PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitledTEST
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent image
      image [set every repeat] = $icon_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = icons.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'icon': 'animals', 'icon_img': 'stimuli/icons/animals.png'},
      {'icon': 'art', 'icon_img': 'stimuli/icons/art.png'},
      {'icon': 'beach', 'icon_img': 'stimuli/icons/beach.png'},
      {'icon': 'camping', 'icon_img': 'stimuli/icons/camping.png'},
      {'icon': 'chatting', 'icon_img': 'stimuli/icons/chatting.png'},
      {'icon': 'chess', 'icon_img': 'stimuli/icons/chess.png'},
      {'icon': 'computers', 'icon_img': 'stimuli/icons/computers.png'},
      {'icon': 'cooking', 'icon_img': 'stimuli/icons/cooking.png'},
      {'icon': 'cycling', 'icon_img': 'stimuli/icons/cycling.png'},
      {'icon': 'dancing', 'icon_img': 'stimuli/icons/dancing.png'},
      {'icon': 'fashion', 'icon_img': 'stimuli/icons/fashion.png'},
      {'icon': 'gaming', 'icon_img': 'stimuli/icons/gaming.png'},
      {'icon': 'gardening', 'icon_img': 'stimuli/icons/gardening.png'},
      {'icon': 'hiking', 'icon_img': 'stimuli/icons/hiking.png'},
      {'icon': 'insturments', 'icon_img': 'stimuli/icons/insturments.png'},
      {'icon': 'knitting', 'icon_img': 'stimuli/icons/knitting.png'},
      {'icon': 'martialarts', 'icon_img': 'stimuli/icons/martialarts.png'},
      {'icon': 'movies', 'icon_img': 'stimuli/icons/movies.png'},
      {'icon': 'music', 'icon_img': 'stimuli/icons/music.png'},
      {'icon': 'photography', 'icon_img': 'stimuli/icons/photography.png'},
      {'icon': 'reading', 'icon_img': 'stimuli/icons/reading.png'},
      {'icon': 'shopping', 'icon_img': 'stimuli/icons/shopping.png'},
      {'icon': 'singing', 'icon_img': 'stimuli/icons/singing.png'},
      {'icon': 'sports', 'icon_img': 'stimuli/icons/sports.png'}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
    Routine trial
  LoopTerminator trials
