PsychoPy2experiment version="2025.1.1"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Enable Escape = False
  Experiment info = {'mriMode': 'Scan', 'runOrder': 'A', 'hand': 'right', 'session': '001', 'stimType': 'c', 'participant': 'test', 'colorVersion': '1crater'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = deg
  Use version = 2023.2.3
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = RewardGoNoGo
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine jitter
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    TextComponent jitteredISI
      durationEstim = 2
      letterHeight = 1.5
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI
      text = +
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    PolygonComponent jitterFrame1
      fillColor = None
      shape = rectangle
      size = [18, 18]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI
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    PolygonComponent jitterFrame2
      fillColor = None
      shape = rectangle
      size = [19, 19]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI
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    CodeComponent jitter_code
      Code Type = Auto->JS
      Begin Routine:
        # set border color of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        jitterFrame2.setLineColor(borderColor)

        # Set Target Image on Go/Nogo Condition
        if expInfo['hand'] == 'right':
            if targetType == 'go':
              correct =  '1'
            else:
              correct = None
        else: # if hand='left'
            if targetType == 'go':
              correct =  '6'
            else:
              correct = None
    KeyboardComponent lateResp
      allowedKeys = '0', '1', '2', '3', '4', '5', '6', '7', '8', '9', 'space'
      correctAns = $correct
      durationEstim = 2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      store = first key
      storeCorrect = True
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    CodeComponent writeFeedbackOutcome
      Code Type = Auto->JS
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      Each Frame:
        # write outcome text
        if targetResp.keys: # if a response is made during planet presentation
          if targetResp.corr==1:
                if valueCondition == 'low':
                    outcomeText = '+ 200'
                    outcomeNumber=200
                else:  # valueCondition == 'high'
                    outcomeText = '+ $1000'
                    outcomeNumber=1000
          else: # if targetResp.corr=0
            if targetType=='nogo':
                if valueCondition == 'low':
                    outcomeText = '- 100'
                    outcomeNumber= -100
                else:  # valueCondition == 'high'
                    outcomeText = '- 500'
                    outcomeNumber= -500

        if not targetResp.keys: # if no response is made during planet presentation
          if  targetType=='go':
            if lateResp.corr==1: # if correct late response
                if valueCondition == 'low':
                    outcomeText = '+ 200'
                    outcomeNumber=200
                else:  # valueCondition == 'high'
                    outcomeText = '+ 1000'
                    outcomeNumber=1000
            else: # if no response is made
                if valueCondition == 'low':
                    outcomeText = '- 100'
                    outcomeNumber= -100
                else:  # valueCondition == 'high'
                    outcomeText = '- 500'
                    outcomeNumber= -500

          elif targetType == 'nogo': # if no response is made for a nogo trial
            rt_array = np.array(lateResp.rt)
            if rt_array.size == 0:
                if valueCondition == 'low':
                    outcomeText = '+ 200'
                    outcomeNumber=200
                else: # if high
                    outcomeText = '+ 1000'
                    outcomeNumber=1000
            else: # if a late response is made for a nogo
                if valueCondition == 'low':
                    outcomeText = '- 100'
                    outcomeNumber= -100
                else:  # valueCondition == 'high'
                    outcomeText = '- 500'
                    outcomeNumber= -500


        # label accuracy including late responses
        if outcomeNumber==1000 or outcomeNumber==200:
            Accuracy=1
        else:
            Accuracy=0
      End Routine:
        trials.addData('Accuracy', Accuracy)
        trials.addData('outcomeText', outcomeText)
        trials.addData('outcomeNumber', outcomeNumber)
    CodeComponent recordRT
      Code Type = Auto->JS
      Begin Experiment:
        RT=None
        goRT=None
      Each Frame:
        if targetResp.keys:
            RT=targetResp.rt
        else:
            RT=np.add(lateResp.rt, 0.5)
        #    RT=0.5 + (lateResp.rt)

        if targetType=='go':
            goRT=RT
        else:
            goRT='nan'
      End Routine:
        trials.addData('RT', RT)
        trials.addData('goRT', goRT)
  Routine feedback
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    CodeComponent rewardFrames
      Code Type = Auto->JS
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      Begin Experiment:
        # set reward text color
        rewardColor='white'
      Begin Routine:
        # set border color of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        rewardFrame2.setLineColor(borderColor)

        # calculate reward total
        outcomeTotal = trials.data['outcomeNumber'].sum()
        if outcomeTotal >= 0:
           if outcomeTotal == 0:
            outcomeType='got'
           else:
            outcomeType='won'
        if outcomeTotal<0:
           outcomeType='lost'

        if outcomeType=='won':
            rewardColor='lawngreen'
        else:
            rewardColor='orangered'

        outcomeDisplay=abs(outcomeTotal)
        msg = "You %s %s points!" %(outcomeType, outcomeDisplay)
      End Routine:
        blocks.addData('outcomeTotal', outcomeTotal)
    TextComponent reward
      color [set every repeat] = $rewardColor
      letterHeight = 2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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    PolygonComponent rewardFrame1
      fillColor = None
      shape = rectangle
      size = [18, 18]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent rewardFrame2
      fillColor = None
      shape = rectangle
      size = [19, 19]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent feedbackTiming
      Code Type = Auto->JS
      Begin Routine:
        blocks.addData('feedbackOnset', fmriClock.getTime())
      End Routine:
        blocks.addData('feedbackOffset', fmriClock.getTime())
  Routine lastJitter
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    TextComponent text
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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  Routine trial_cue
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    CodeComponent code
      Code Type = Auto->JS
      Begin Experiment:
        # set border color
        borderColor='black'
        valueCondition=None
        valueConditions=None
      Begin Routine:
        if Run=='Run1':
            valueConditions=ValueCondition1
        if Run=='Run2':
            valueConditions=ValueCondition2
        if Run=='Run3':
            valueConditions=ValueCondition3
        if Run=='Run4':
            valueConditions=ValueCondition4



        # Set Cue image on Reward Value Condition
        if (valueConditions == 'Low1') or (valueConditions == 'Low2') or (valueConditions == 'Low3') or (valueConditions == 'Low4') or (valueConditions == 'Low5') or (valueConditions=='Low6'):
            valueCondition='low'
            cueImage = 'low.png'
        else:
            valueCondition='high'
            cueImage = 'high.png'
        # set border width of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        frame2.setLineColor(borderColor)
      End Routine:
        blocks.addData('valueConditions', valueConditions)
        blocks.addData('valueCondition', valueCondition)
        blocks.addData('cueImage', cueImage)
    CodeComponent timingCode
      Code Type = Auto->JS
      Begin Routine:
        #cueTimeAdded = False
        currentLoop.addData('blockOnset', fmriClock.getTime())
        currentLoop.addData('cueOnset', fmriClock.getTime())
      Each Frame:
        #if not cueTimeAdded:
        #    currentLoop.addData('blockOnset', fmriClock.getTime())
        #    currentLoop.addData('cueOnset', fmriClock.getTime())
        #    cueTimeAdded = True
      End Routine:
        currentLoop.addData('cueOffset', fmriClock.getTime())
    ImageComponent Cue2
      image [set every repeat] = $os.path.join('images',cueImage)
      size = [12.5, 10]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent frame1
      fillColor = None
      shape = rectangle
      size = [18, 18]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent frame2
      fillColor = None
      shape = rectangle
      size = [19, 19]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent generateJitterList
      Code Type = Auto->JS
      Begin Experiment:
        allISIs=[3.5, 2.5, 3, 2.5, 1.5, 2, 1.5, 2.5]

        import copy, random
      Begin Routine:
        ISIs=copy.copy(allISIs)
        random.shuffle(ISIs)
    CodeComponent setStimRotations
      Code Type = Auto->JS
      Begin Experiment:
        rotations=[45, 90, 135, 180, 225, 270, 315, 360]

        import copy, random
      Begin Routine:
        AllRotations=copy.copy(rotations)
        random.shuffle(AllRotations)
    PolygonComponent drawCircle
      fillColor = None
      lineWidth = 5
      nVertices = 90
      shape = regular polygon...
      size = [16.5, 16.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent blockTiming
      Code Type = Auto->JS
      Begin Experiment:
        import time
        expInfo['expStartTime'] = time.ctime()

        BLOCK_DURATION = 10
        blockClock = core.Clock()
      Begin Routine:
        blockClock.reset()
  Routine End
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    TextComponent endTask
      letterHeight = 1
      startVal [time (s)] = 0
      text = Congratulations! You finished the game!
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    KeyboardComponent SpaceToExit
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent backupcsv_creation
      Code Type = Py
      Begin Experiment:
        import os

        folder_name = "C:\Users\Public\LAB PROJECTS\Chein-Lab\LITe\planetGoNoGo\Data\backup"

        if not os.path.exists(folder_name):
            os.makedirs(folder_name)

        datafile = os.path.join(
            folder_name,
            os.path.basename(filename) + "_backup.csv"
        )
    CodeComponent forcesave_backup
      Code Type = Py
      Begin Experiment:
        thisExp.saveAsWideText(
            datafile,
            fileCollisionMethod='overwrite'
        )
      End Routine:
        thisExp.saveAsWideText(
            datafile,
            fileCollisionMethod='overwrite'
        )
  Routine endBlock
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    TextComponent breakFixation
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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    CodeComponent blockOffset
      Code Type = Auto->JS
      End Routine:
        blocks.addData('blockOffset', fmriClock.getTime())
  Routine fixation_2
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    CodeComponent rewardFrames_3
      Code Type = Auto->JS
      Begin Experiment:
        # set reward text color
        rewardColor='white'
      Begin Routine:
        # set border color of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        rewardFrame2.setLineColor(borderColor)

        # calculate reward total
        outcomeTotal = trials.data['outcomeNumber'].sum()
        if outcomeTotal >= 0:
           if outcomeTotal == 0:
            outcomeType='got'
           else:
            outcomeType='won'
        if outcomeTotal<0:
           outcomeType='lost'

        if outcomeType=='won':
            rewardColor='green'
        else:
            rewardColor='red'

        outcomeDisplay=abs(outcomeTotal)
        msg = "You %s $%s0!" %(outcomeType, outcomeDisplay)
      End Routine:
        trials.addData('outcomeTotal', outcomeTotal)
    TextComponent reward_3
      color [set every repeat] = $rewardColor
      letterHeight = 1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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    PolygonComponent rewardFrame1_3
      fillColor = None
      shape = rectangle
      size = [18, 18]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent rewardFrame2_3
      fillColor = None
      shape = rectangle
      size = [19, 19]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent feedbackTiming_3
      Code Type = Auto->JS
      Begin Routine:
        trials.addData('feedbackOnset', fmriClock.getTime())
      End Routine:
        trials.addData('feedbackOffset', fmriClock.getTime())
  Routine jitter_2
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    CodeComponent fixationFrames_2
      Code Type = Auto->JS
      Begin Routine:
        # set border color of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        fixationFrame2.setLineColor(borderColor)
    TextComponent fixation1_2
      color [set every repeat] = white
      letterHeight = 1.5
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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    PolygonComponent fixationFrame1_2
      fillColor = None
      shape = rectangle
      size = [18, 18]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent fixationFrame2_2
      fillColor = None
      shape = rectangle
      size = [19, 19]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Welcome
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    TextComponent welcomeScreen
      letterHeight = 2
      startVal [time (s)] = 0.0
      text = Welcome to the planets game!
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    KeyboardComponent advanceScreen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      pos = [-15, 12]
      shape = rectangle
      size = [2, 2]
      startVal [time (s)] = 0.0
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  Routine waitForScanner
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    CodeComponent wait_for_scanner_code
      Code Type = Auto->JS
      Begin Experiment:
        fmriClock = core.Clock()
        #trigger = 'usb'
        #trigger = 'parallel'
        #if trigger == 'parallel':
        #    from psychopy.contrib import parallel as winioport
        #    #from psychopy import parallel
        #elif trigger == 'usb':
        #    from psychopy.hardware.emulator import launchScan
            #
            # settings for launchScan:
        #    MR_settings = {
        #        'TR': 2.000, # duration (sec) per volume
        #        'volumes': 210, # number of whole-brain 3D volumes / frames
        #        'sync': 'equal', # character to use as the sync timing event; assumed to come at start of a volume
        #        'skip': 0, # number of volumes lacking a sync pulse at start of scan (for T1 stabilization)
        #        }

        # for GSR sync
        #import serial
        #class HvdSerial(serial.Serial):
        #    def writeUSB(self,dest,val):
        #        self.write(chr(dest))
        #        self.write(chr(val))

        #try:
        #    ser = HvdSerial('/dev/tty.usbmodem12341',timeout=1)
            # Zero Out Parallel & BNC
        #    ser.writeUSB(0,0)
        #    core.wait(.3)
        #    ser.writeUSB(1,0)
        #    core.wait(.3)
        #except serial.SerialException:
        #    ser = None
        #    logging.warn('No Serial Device Found.')
      Begin Routine:
        #if expInfo['mriMode'] != 'Off':
        #    if trigger == 'usb':
        #        vol = launchScan(win, MR_settings,
        #              globalClock=fmriClock,
        #              mode=expInfo['mriMode'])
        #        if ser: # for GSR sync
        #            ser.writeUSB(0,1)  # Raise BNC
        #            ser.writeUSB(1,int('11111111',2))  # Raise all pins for Parallel

        #    elif trigger == 'parallel':
        #        address = 0x378
        #        #parallel.setPortAddress(0x378)
        #        wait_msg = "Get Ready!"
        #        pinStatus = winioport.inp(address)
        #        waitMsgStim = visual.TextStim(win, color='white', text=wait_msg)
        #        waitMsgStim.draw()
        #        win.flip()
        #        while True:
        #            if pinStatus != winioport.inp(address):
        #               break
                       # start exp when pin values change
        #        fmriClock.reset()
        #        logging.exp('parallel trigger: start of scan')
        #        win.flip()  # blank the screen on first sync pulse received

        #expInfo['triggerWallTime'] = time.ctime()
      End Experiment:
        #ser.writeUSB(0,0)
        #ser.writeUSB(1,0)
        #ser.close()
        #win.close()
        #core.quit()
      End Routine:
        routineTimer.reset()
    CodeComponent logVersionName
      Code Type = Auto->JS
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      Begin Routine:
        runs.addData('TaskVersion', runOrderFile)
  Routine trigger
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    TextComponent waitForTrigger
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = Get Ready!
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    KeyboardComponent receiveTrigger
      allowedKeys = 'equal'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine calcFB
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    CodeComponent calculateFeedback
      Code Type = Auto->JS
      Begin Experiment:
        # set outcome text
        outcomeText='$0'
        outcomeNumber=0
      Begin Routine:
        # write outcome text
        if key_resp_1.corr==1:
                if valueCondition == 'low':
                    outcomeText = '+ $0.20'
                    outcomeNumber=' 0.20'
                else:  # valueCondition == 'high'
                    outcomeText = '+ $1.00'
                    outcomeNumber='1.00'
        else:
              if valueCondition == 'low':
                    outcomeText = '- $0.10'
                    outcomeNumber= '-0.10'
              else:  # valueCondition == 'high'
                    outcomeText = '- $0.50'
                    outcomeNumber= '-0.50'
      End Routine:
        trials.addData('outcomeText',outcomeText)
        trials.addData('outcomeNumber',outcomeNumber)
  Routine runEnd
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    TextComponent breakText
      letterHeight = 1
      startVal [time (s)] = 0
      text = You finished this round!
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    KeyboardComponent SpaceToEndRun
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent runOffset
      Code Type = Auto->JS
      Begin Routine:
        runs.addData('runOffset', fmriClock.getTime())
  Routine fixation
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    CodeComponent fixationFrames
      Code Type = Auto->JS
      Begin Routine:
        # set border color of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        fixationFrame2.setLineColor(borderColor)
    TextComponent fixation1
      color [set every repeat] = white
      letterHeight = 1.5
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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    PolygonComponent fixationFrame1
      fillColor = None
      shape = rectangle
      size = [18, 18]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent fixationFrame2
      fillColor = None
      shape = rectangle
      size = [19, 19]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine directions3
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    ImageComponent cue
      image = $os.path.join('images','low.png')
      pos = [-2, 0]
      size = [0.5, 0.5]
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = $os.path.join('images','crater_planet.png')
      size = [5, 5]
      startVal [time (s)] = 0.0
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    TextComponent outcome
      color = green
      letterHeight = 0.1
      pos = [0, 1]
      startVal [time (s)] = 0.0
      text = $0.20
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  Routine setOrder
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    CodeComponent setRunOrders
      Code Type = Auto->JS
      Begin Routine:
        if Run=='Run1':
            valueConditions=ValueCondition1
        if Run=='Run2':
            valueConditions=ValueCondition2
        if Run=='Run3':
            valueConditions=ValueCondition3
        if Run=='Run4':
            valueConditions=ValueCondition4
  Routine block_ITI
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    TextComponent fixation_1
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI1
      text = +
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    PolygonComponent itiFrame1
      fillColor = None
      shape = rectangle
      size = [18, 18]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI1
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    PolygonComponent itiFrame2
      fillColor = None
      lineColor = black
      shape = rectangle
      size = [19, 19]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI1
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    CodeComponent setFrame
      Code Type = Auto->JS
      Begin Experiment:
        # set border color
        borderColor='black'
      Begin Routine:
        # set border width of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        itiFrame2.setLineColor(borderColor)
  Routine trial
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    CodeComponent setJitter
      Code Type = Auto->JS
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      Begin Routine:
        ISI=ISIs.pop()
      End Routine:
        trials.addData('ISI', ISI)
    CodeComponent setRotation
      Code Type = Auto->JS
      Begin Routine:
        rotation=AllRotations.pop()
    CodeComponent setTargetColors
      Code Type = Auto->JS
      Begin Experiment:
        targetType=None
        prepot=None
      Begin Routine:
        if valueConditions=="Low1":
            targetColor=LowColors1
            targetType=TrialType1
            prepot=Prepot1
            GoPrepot=GoPrepot1
            stimPic=LowStimPic1
        elif valueConditions=="High1":
            targetColor=HighColors1
            targetType=TrialType1
            prepot=Prepot1
            GoPrepot=GoPrepot1
            stimPic=HighStimPic1
        if valueConditions=="Low2":
            targetColor=LowColors2
            targetType=TrialType2
            prepot=Prepot2
            GoPrepot=GoPrepot2
            stimPic=LowStimPic2
        elif valueConditions=="High2":
            targetColor=HighColors2
            targetType=TrialType2
            prepot=Prepot2
            GoPrepot=GoPrepot2
            stimPic=HighStimPic2
        if valueConditions=="Low3":
            targetColor=LowColors3
            targetType=TrialType3
            prepot=Prepot3
            GoPrepot=GoPrepot3
            stimPic=LowStimPic3
        elif valueConditions=="High3":
            targetColor=HighColors3
            targetType=TrialType3
            prepot=Prepot3
            GoPrepot=GoPrepot3
            stimPic=HighStimPic3
        if valueConditions=="Low4":
            targetColor=LowColors4
            targetType=TrialType4
            prepot=Prepot4
            GoPrepot=GoPrepot4
            stimPic=LowStimPic4
        elif valueConditions=="High4":
            targetColor=HighColors4
            targetType=TrialType4
            prepot=Prepot4
            GoPrepot=GoPrepot4
            stimPic=HighStimPic4
        if valueConditions=="Low5":
            targetColor=LowColors5
            targetType=TrialType5
            prepot=Prepot5
            GoPrepot=GoPrepot5
            stimPic=HighStimPic5
        elif valueConditions=="High5":
            targetColor=HighColors5
            targetType=TrialType5
            prepot=Prepot5
            GoPrepot=GoPrepot5
            stimPic=HighStimPic5
        if valueConditions=="Low6":
            targetColor=LowColors6
            targetType=TrialType6
            prepot=Prepot6
            GoPrepot=GoPrepot6
            stimPic=LowStimPic6
        elif valueConditions=="High6":
            targetColor=HighColors6
            targetType=TrialType6
            prepot=Prepot6
            GoPrepot=GoPrepot6
            stimPic=HighStimPic6
    CodeComponent setKeyResponses
      Code Type = Auto->JS
      Begin Experiment:
        # set border color
        borderColor='black'

        # Assumes "first key" or "last key" was chosen for store.
        # List conversion (to single key) happens immediately
        # when component finishes.
        def check_correct(keys,correct):
            if len(keys):  # At least 1 response
                if keys == correct:
                    return True
                else:
                    return False
            else:  # No response
                if correct == None:
                    return True
                else:
                    return False

        # set outcome values
        outcomeNumber='0'
        outcomeText='0'
      Begin Routine:
        #targetImage=stimPic

        # Set Target Image on Go/Nogo Condition
        if expInfo['hand'] == 'right':
            if targetType == 'go':
              correct =  '1'
            else:
              correct = None
        else: # if hand='left'
            if targetType == 'go':
              correct =  '6'
            else:
              correct = None

        # set border color of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        trialFrame2.setLineColor(borderColor)
      End Routine:
        trials.addData('valueCondition', valueCondition)
        #trials.addData('targetImage', targetImage)
        trials.addData('targetColor', targetColor)
        trials.addData('stimRotation', rotation)
        trials.addData('thisTargetType', targetType)
        trials.addData('thisTrialNoGoPrepot', prepot)
        trials.addData('thisTrialGoPrepot', GoPrepot)
    PolygonComponent trialFrame
      fillColor = None
      shape = rectangle
      size = [18, 18]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    PolygonComponent trialFrame2
      durationEstim = 0.5
      fillColor = None
      lineColor = black
      shape = rectangle
      size = [19, 19]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent Target
      durationEstim = 0.5
      flipHoriz = True
      image [set every repeat] = $os.path.join('images',stimPic)
      ori [set every repeat] = $rotation
      size = [15, 15]
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      texture resolution = 256
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    KeyboardComponent targetResp
      allowedKeys [set every repeat] = '1', '2', '6', '7'
      correctAns = $correct
      durationEstim = 0.5
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      store = first key
      storeCorrect = True
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    CodeComponent targetTiming
      Code Type = Auto->JS
      Begin Routine:
        trials.addData('targetOnset', fmriClock.getTime())

        #targetTimeAdded= False
      Each Frame:
        #if not targetTimeAdded:
        #    currentLoop.addData('targetOnset', fmriClock.getTime())
        #    targetTimeAdded = True
      End Routine:
        trials.addData('targetOffset', fmriClock.getTime())
  Routine trial_ISI
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    CodeComponent setFrame_isi
      Code Type = Auto->JS
      Begin Experiment:
        # set border color
        borderColor='black'
      Begin Routine:
        # set border color of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        isiFrame2.setLineColor(borderColor)
    TextComponent ISI_2
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI2
      text = +
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    PolygonComponent isiFrame1
      fillColor = None
      shape = rectangle
      size = [18, 18]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI2
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    PolygonComponent isiFrame2
      fillColor = None
      pos = [19, 19]
      shape = rectangle
      size = [0.5, 0.5]
      startVal [time (s)] = 0.0
      stopVal [condition] = $ISI_2.status==FINISHED
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  Routine outcome_2
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  Routine text3
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    KeyboardComponent advanceScreen_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent directionsText_3
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = Planets have stripes. Here are some examples of planets you may see:
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  Routine text2
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    KeyboardComponent advanceScreen_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent directionText_2
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = Moons have craters. When you see a moon, do NOTHING. Here are some examples of the moons you may see:
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  Routine text1
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    KeyboardComponent advanceScreen_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent directionText_1
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = In this game, you will be traveling through different galaxies in space. In these galaxies, you will see planets or moons.
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    CodeComponent setConditionsFile
      Code Type = Auto->JS
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      Begin Experiment:
        colorTrialsFile = os.path.join('conditions', 'RewardGoNoGo_Version%s.xlsx' % expInfo['colorVersion'])
        logging.exp("Using trial color file: %s" % colorTrialsFile)
        runOrderFile = os.path.join('conditions', 'GalaxyValues%s.xlsx' % expInfo['runOrder'])
        logging.exp("Using run order file: %s" % runOrderFile)
  Routine text2_1
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    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine image1
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    KeyboardComponent advanceScreen_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent moonExampleImage
      image = instructionimages/gng_moons.jpg
      size = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine image2
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    KeyboardComponent advanceScreen_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent planetExampleImage
      image = instructionimages/gng_planets.jpg
      size = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine text4
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    KeyboardComponent advanceScreen_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent directionText_3
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = When you see a planet, click your pointer finger as quickly as possible. Remember to press the button all the way down, and then let it go right after.
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  Routine text5
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    KeyboardComponent advanceScreen_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent directionText_4
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = You're going to see four different galaxies. Before each galaxy, you're going to see either one star or two stars.
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  Routine text6
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    KeyboardComponent advanceScreen_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent directionText_5
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        If you see one star before you enter a galaxy, that means you can win 200 points when you click a planet.

        But when you don't click a planet, or you click a moon, you lose 100 points.
  Routine image3
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    KeyboardComponent advanceScreen_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent cueExampleImage_1
      image = instructionimages/gng_starcue1.jpg
      size = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine text6_2
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  Routine image4
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    KeyboardComponent advanceScreen_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent cueExampleImage_2
      image = instructionimages/gng_starcue2.jpg
      size = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine text7
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    KeyboardComponent advanceScreen_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent directionText_6
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        If you see two stars before you enter a galaxy, that means you can win 1000 points when you click a planet.

        But when you don't click a planet, or you click a moon, you lose 500 points.
  Routine text8
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    KeyboardComponent advanceScreen_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent directionText_7
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        At the end of each galaxy, you'll see how many points you earned, and between each galaxy you'll get to take a short break.

        Remember, use your pointer finger, and click ONLY for planets.

        Do you have any questions?
Flow
  Routine Welcome
  Routine text1
  Routine text2
  Routine image1
  Routine text3
  Routine image2
  Routine text4
  Routine text5
  Routine image3
  Routine text6
  Routine image4
  Routine text7
  Routine text8
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = conditions/PlanetRuns.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Run': 'Run1'},
      {'Run': 'Run2'},
      {'Run': 'Run3'},
      {'Run': 'Run4'}]
    Routine trigger
    Routine waitForScanner
    LoopInitiator blocks loopType="TrialHandler"
      conditionsFile = $runOrderFile
      loopType = sequential
      nReps = 1
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      Routine trial_cue
      Routine fixation
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = $colorTrialsFile
        loopType = sequential
        nReps = 1
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        Routine trial
        Routine jitter
      LoopTerminator trials
      Routine feedback
      Routine endBlock
    LoopTerminator blocks
    Routine runEnd
  LoopTerminator runs
  Routine End
